PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = image_slide
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Routines
  Routine trial
    ImageComponent image_trial
      image [set every repeat] = $current_pic
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9999
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    KeyboardComponent keyboard_trial
      allowedKeys = 'left','right'
      correctAns = left
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9999
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    CodeComponent code_trial
      Code Type = Py
      Begin Experiment:
        # initializing variables that will be used for flipping through
        # the images

        # enter the loweest/highest image
        # numbers here
        min_img_no = 1
        max_img_no = 3

        img_no = min_img_no

        # the "imgs/" part is the folder that the images are saved in.
        # the ".jpg" part is the end of the file name. this script
        # assumes that all images are simply named "1.jpg", "2.jpg"
        # and so on
        current_pic = "imgs/" + str(img_no) + ".jpg"
      Begin Routine:
        current_pic = "imgs/" + str(img_no) + ".jpg"
      Each Frame:
        if trial_loop_clock.getTime() > experiment_duration:
            trial_loop.nReps = 0
      End Routine:
        # save number of the image that was watched during this
        # loop iteration/routine
        trial_loop.addData('image_trial.image_number', img_no)

        # if the participant pressed the left key, decrease the image
        # number by one (e. g. going from "image 2" to "image 1"),
        # and if they pressed the right key, increase the image number
        # by one ("image 2" -> "image 3")
        if (keyboard_trial.keys == str('left')) or (keyboard_trial.keys == 'left'):
            img_no -= 1
        elif (keyboard_trial.keys == str('right')) or (keyboard_trial.keys == 'right'):
            img_no += 1

        # if the participant goes below the minimum/start value for the
        # image number, go to the last image instead. if they go above
        # the maximum image number value, go to the first image.
        if img_no < min_img_no:
            img_no = max_img_no
        elif img_no > max_img_no:
            img_no = min_img_no

        current_pic = "imgs/" + str(img_no) + ".jpg"
  Routine welcome
    TextComponent text_welcome
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9999
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      text:
        Welcome to the image slide show.

        Press 'spacebar' to continue.
    KeyboardComponent keyboard_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9999
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    CodeComponent code_welcome
      Code Type = Py
      Begin Experiment:
        # enter the number of seconds that the experiment should continue
        experiment_duration = 30
      End Routine:
        trial_loop_clock = core.Clock()
  Routine end
    TextComponent text_end
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9999
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      text:
        Thank you!

        Please wait for the researcher.

        ('q' to finish the experiment)
    KeyboardComponent keyboard_end
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9999
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Flow
  Routine welcome
  LoopInitiator trial_loop loopType="TrialHandler"
    loopType = random
    nReps = 10000
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    Routine trial
  LoopTerminator trial_loop
  Routine end
